PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Enable Escape = False
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'runs': '10'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = ABA_pilot
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine Instructions
    RoutineSettingsComponent Instructions
      disabled = True
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    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Hold the space button down if you're hearing two streams and release when you're hearing one.

        You will complete 40 runs, you can rest between runs.

        When you are ready, press space to start.
    KeyboardComponent inst_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Setup
    RoutineSettingsComponent Setup
      disabled = True
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    TextComponent setup_wait_message
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please wait for set up to finish.

        You will be taken to the experiment automatically.

        Thank you!
        CoNCH Lab
    KeyboardComponent setup_key_resp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Break
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    TextComponent break_message
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Take a break!

        Press space for the next block.
    KeyboardComponent break_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Trial
    RoutineSettingsComponent Trial
      disabled = True
      stopVal [duration (s)] = 8
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    PolygonComponent trial_fixation_cross
      fillColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.5
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    SoundComponent trial_ABA_sequence
      forceEndRoutine = False
      sound [set every repeat] = $stimuli
      speakerIndex = 8.0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
      volume = 0.2
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    KeyboardComponent trial_key_resp
      allowedKeys = 'q','p'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      store = all keys
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    CodeComponent trial_multiple_keypress
      Code Type = Py
      disabled = True
      Begin Experiment:
        # Begin Experiment tab
        response_times = []
        press_durations = []
      Begin Routine:
        # Begin Routine tab
        trial_clock = core.Clock()
        trial_clock.reset()

        press_start_time = None
        press_end_time = None

        response_times = []  # Reset for each trial
        press_durations = []  # Reset for each trial
      Each Frame:
        # Each Frame tab
        keys = event.getKeys(timeStamped=trial_clock)
        for key, timestamp in keys:
            if key == 'space':
                if press_start_time is None:
                    press_start_time = timestamp
                    response_times.append(timestamp)
                else:
                    press_end_time = timestamp
                    duration = press_end_time - press_start_time
                    press_durations.append(duration)
                    press_start_time = None  # Reset for the next press
      End Routine:
        # End Routine tab
        thisExp.addData('response_times', response_times)
        thisExp.addData('press_durations', press_durations)
    CodeComponent trial_send_trigger
      Code Type = Py
      disabled = True
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      Before Experiment:
        import pyxid2
        import time

        #generate a list of connected xid devices
        devices = pyxid2.get_xid_devices()

        #assign the first device in the list as 'dev'
        #NB if multiple devices are connected (e.g., stimtracker & cedrus response box, this value may need to be changed)
        dev=devices[0]
      Begin Routine:
        #set the pule duration in ms
        dev.set_pulse_duration(15)

        #raise lines in the stimtracker to output unique triggers provided as integer values in the trial spreadsheet under the column 'trig'
        dev.activate_line(bitmask=level)

        #alternatively you can raise specific lines in the stimtracker by providing integer values (1:8 or 1:16 depending on hardware) or an array or values (e.g., [1,2,8]) in the trial spreadsheet under the column 'lines')
        #dev.activate_line(lines=trig)

        #lines can also be raised conditionally & in combination as in example below:
        #if condition=='audio_trial':
        #    dev.activate_line(lines=[1])
        #if condition=='video_trial':
        #    dev.activate_line(lines=[2])
        #if condition=='audiovisual_trial':
        #    dev.activate_line(lines=[1,2])
      Each Frame:
        if condition=='audio_trial':
            dev.activate_line(lines=[1])
    CodeComponent triggerCode
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        countedKeys = 0
        d.activate_line(bitmask=trig)
      Each Frame:
        if len(trial_key_resp.keys) > countedKeys:
            if trial_key_resp.keys[countedKeys] == 'q':
                trigCode = 100
            elif trial_key_resp.keys[countedKeys] == 'p':
                trigCode = 200
            countedKeys += 1 # increase the keys that were counted
            d.activate_line(bitmask=trigCode) # sent the trigger
    MarkEvents MarkEvents plugin="psychopy-eyelink"
      componentsForEyeLinkRespEventMessages = trial_key_resp
      componentsForEyeLinkStimEventMessages = trial_ABA_sequence
      disabled = True
      includeAllEventMarkedComponentsForDVDrawingMessages = True
      includeAllEventMarkedComponentsForIAMessages = False
      interestAreaMargins = 0
      interestAreaShape = Rectangle
      sendTrialOnsetOffsetMessages = False
      sendVideoFrameMessages = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      trialConditionVariablesForEyeLinkLogging = trig
      useQuitKeys = True
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  Routine Prep
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    CodeComponent triggerSetup
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        import pyxid2 as pyxid
        import time
        devices = pyxid.get_xid_devices()
        assert len(devices) > 0
        d = devices[0]
        d.init_device()
        d.set_pulse_duration(10)

        #one sweep through all lines
        for i in range (1,9):
                d.activate_line(lines=[i])
                time.sleep(1.2)
    CodeComponent stimSetup
      Code Type = Auto->JS
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      Begin Experiment:
        stimDuration = 16
      Begin Routine:
        import pickle
        import random

        jitter = [-4,-3,-2,-1,0,1,2,3,4]

        pID = expInfo['participant']
        nBlocks = expInfo['runs']

        pptPickle = "pptJNDs/" + str(pID) + "_jnd.pckl"

        with open(pptPickle, "rb") as f:
            pptJND = pickle.load(f)

        pptJND = round(pptJND*4)/4
  Routine EyeSetup
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    InitializeConnection Initialize plugin="psychopy-eyelink"
      disableEyeLinkAudio = True
      dummyMode = False
      hostAddress = 100.1.1.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      useCustomHostIP = False
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    CameraSetup CameraSetup plugin="psychopy-eyelink"
      backgroundColor = win.color
      calibrationFilenames = 'qbeep.wav','type.wav','error.wav'
      calibrationSounds = defaults
      calibrationType = HV9
      foregroundColor = (1,1,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      targetSize = 24
      targetType = circle
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  Routine EyeStart
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    StartRecording StartRecord plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine EyeStop
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    StopRecording StopRecord plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine ITI
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    PolygonComponent ITI_cross
      fillColor = 1.0000, 1.0000, 0.8824
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    SoundComponent washout
      forceEndRoutine = False
      sound [set every repeat] = stimuli/noise.wav
      speakerIndex = 8.0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      volume = 0.01
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  Routine Spacebar_Trial
    RoutineSettingsComponent Spacebar_Trial
      stopVal [duration (s)] = stimDuration
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    PolygonComponent trial_cross
      fillColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = stimDuration
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    SoundComponent trial_sound
      forceEndRoutine = False
      sound [set every repeat] = $stimFile
      speakerIndex = 8.0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = stimDuration
      volume = 0.2
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    KeyboardComponent space_release
      allowedKeys = 'space'
      forceEndRoutine = False
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = stimDuration
      store = all keys
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    KeyboardComponent space_press
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = stimDuration
      store = all keys
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    CodeComponent spacebar_code
      Code Type = Auto->JS
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      Begin Routine:
        countedKeysR = 0
        countedKeysP = 0
        #d.activate_line(bitmask=trig)
      Each Frame:
        if len(space_release.keys) > countedKeysR:
            countedKeysR += 1 # increase the keys that were counted
            #d.activate_line(bitmask=200) # sent the trigger
            el_tracker.sendMessage('Released')

        if len(space_press.keys) > countedKeysP:
            countedKeysP += 1 # increase the keys that were counted
            #d.activate_line(bitmask=100) # sent the trigger
            el_tracker.sendMessage('Pressed')
    CodeComponent test
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        countedKeysR = 0
        countedKeysP = 0
      Each Frame:
        if len(space_release.keys) > countedKeysR:
            countedKeysR += 1 # increase the keys that were counted
            print('release') # sent the trigger

        if len(space_press.keys) > countedKeysP:
            countedKeysP += 1 # increase the keys that were counted
            print('press') # sent the trigger
    MarkEvents MarkEvents_space plugin="psychopy-eyelink"
      componentsForEyeLinkStimEventMessages = trial_sound
      includeAllEventMarkedComponentsForDVDrawingMessages = True
      includeAllEventMarkedComponentsForIAMessages = False
      interestAreaMargins = 0
      interestAreaShape = Rectangle
      sendTrialOnsetOffsetMessages = False
      sendVideoFrameMessages = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = True
      trialConditionVariablesForEyeLinkLogging = trig
      useQuitKeys = True
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  Routine startTrial
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    TextComponent startTrialtxt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press [space] to start the trial.
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    KeyboardComponent startTrialspace
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent pickStimFile
      Code Type = Auto->JS
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      Begin Routine:
        pickedJitter = random.choice(jitter)

        if condition == 99:
            dfVal = pptJND
        else:
            dfVal = condition


        stimFile = f"stimuli/ABA/df_{dfVal:.2f}_jitter_{pickedJitter}.wav"


        thisExp.addData('jitter', pickedJitter)
        thisExp.addData('stimFile', stimFile)
      Each Frame:
        keys = event.getKeys()
        if 'b' in keys and 'p' in keys:
                core.quit()
  Routine driftCheck
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    DriftCheck DriftCheck plugin="psychopy-eyelink"
      backgroundColor = win.color
      driftCheckFilenames = 'qbeep.wav','type.wav','error.wav'
      driftCheckSounds = off
      foregroundColor = (1,1,1)
      screenUnitType = pix
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      targetPosition = [0,0]
      targetSize = 24
      targetType = circle
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Flow
  Routine Prep
  Routine EyeSetup
  Routine Setup
  Routine Instructions
  LoopInitiator Blocks loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = nBlocks
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = trials.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'trig': 1, 'condition': 0.25},
        {'trig': 2, 'condition': 99},
        {'trig': 3, 'condition': 8},
        {'trig': 1, 'condition': 0.25},
        {'trig': 2, 'condition': 99},
        {'trig': 3, 'condition': 8}]
      Routine startTrial
      Routine EyeStart
      Routine Trial
      Routine Spacebar_Trial
      Routine EyeStop
      Routine ITI
      Routine driftCheck
    LoopTerminator trials
    Routine Break
  LoopTerminator Blocks
