PsychoPy2experiment version="2024.2.4"
Settings
  Audio latency priority = 4
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2024.2.4
  Window size (pixels) = [1920, 1080]
  expName = staircasePsychopy
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine setup
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        startingIntensity = 4.00
        stimDuration = 16
        hitThreshold = 0.5
        nRev = 6
        nTrials = 10
        stepSizes = [1.00,1.00,0.50,0.50,0.25,0.25]

        staircase = data.StairHandler(startVal = startingIntensity, nTrials = nTrials, nReversals= nRev, stepType='lin', minVal = 0.00, maxVal= 8.00, nUp = 1, nDown = 1, stepSizes = stepSizes)

        stimFile = 'stimuli\ABA\df_' + "{:.2f}".format(startingIntensity) + '_jitter_0.wav'

        def proportion_pressed(press_times, release_times, trial_duration=stimDuration):
            # Ensure lists are sorted
            press_times = sorted(press_times)
            release_times = sorted(release_times)

            intervals = []
            current_time = 0.0
            pressed = True  # Button starts pressed

            # Merge events into a timeline
            events = []
            for t in press_times:
                events.append((t, 'press'))
            for t in release_times:
                events.append((t, 'release'))
            events.sort()

            for t, event in events:
                if pressed:
                    intervals.append((current_time, t))
                current_time = t
                pressed = (event == 'press')

            # If still pressed at the end, add the last interval
            if pressed and current_time < trial_duration:
                intervals.append((current_time, trial_duration))

            # Sum all pressed intervals
            pressed_time = sum(end - start for start, end in intervals)
            return pressed_time / trial_duration
  Routine startTrial
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    TextComponent startTrialtxt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press [space] to start the trial.
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    KeyboardComponent startTrialspace
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Trial
    RoutineSettingsComponent Trial
      stopVal [duration (s)] = stimDuration
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    PolygonComponent trial_cross
      fillColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = stimDuration
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    SoundComponent trial_sound
      forceEndRoutine = False
      sound [set every repeat] = $stimFile
      speakerIndex = 7.0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = stimDuration
      volume = 0.2
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    KeyboardComponent space_release
      allowedKeys = 'space'
      forceEndRoutine = False
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = stimDuration
      store = all keys
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    KeyboardComponent space_press
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = stimDuration
      store = all keys
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    CodeComponent spacebarCode
      Code Type = Auto->JS
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      Begin Routine:
        countedKeysR = 0
        countedKeysP = 0
      Each Frame:
        if len(space_release.keys) > countedKeysR:
            countedKeysR += 1 # increase the keys that were counted
            #print('release') # sent the trigger

        if len(space_press.keys) > countedKeysP:
            countedKeysP += 1 # increase the keys that were counted
            #print('press') # sent the trigger
  Routine ITI
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    PolygonComponent ITI_cross
      fillColor = 1.0000, 1.0000, 0.8824
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    SoundComponent washout
      forceEndRoutine = False
      sound [set every repeat] = stimuli/noise.wav
      speakerIndex = 7.0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      volume = 0.01
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    CodeComponent prepNextTrial_2
      Code Type = Auto->JS
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      Begin Routine:
        press_times = space_press.rt
        release_times = space_release.rt
        prop = proportion_pressed(press_times, release_times)

        if prop > hitThreshold:
            resp = 0
        else:
            resp = 1
      End Routine:
        staircase.addResponse(resp)  # response = 0 (integrated) or 1 (segregated)
        try:
            nextDF = staircase.next()
            feedback = f"Integrated percept time proportion: {prop}, Resp was therefore: {resp}, Next df will be: {nextDF:.2f}"
            print(feedback)
            stimFile = f"stimuli\ABA\df_{nextDF:.2f}_jitter_0.wav"
        except StopIteration:
            reversal_intensities = staircase.reversalIntensities
            jnd = sum(reversal_intensities) / len(reversal_intensities)
            trialLoop.finished = True
  Routine logJND
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    CodeComponent logJNDcode
      Code Type = Py
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      Begin Routine:
        import pickle

        pID = expInfo['participant']
        outputDirectory = "pptJNDs/"
        os.makedirs(outputDirectory, exist_ok=True)


        jnd_path = outputDirectory + pID + "_jnd.pckl"

        with open(jnd_path, "wb") as f:
            pickle.dump(jnd, f)
Flow
  Routine setup
  LoopInitiator trialLoop loopType="TrialHandler"
    loopType = random
    nReps = 99
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    Routine startTrial
    Routine Trial
    Routine ITI
  LoopTerminator trialLoop
  Routine logJND
